PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'sub-000'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = 3.0 decision_making
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine setp_up
    CodeComponent start_up
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        import pandas as pd
        #add counterbalance and allowed keys
        participant_id = expInfo['participant']
        last_three_digits = int(participant_id[-3:])
        #as of right now the keys used are 'n' and 'm'

        if last_three_digits % 2 == 0:
            key_1 = 'n'
            key_2 = 'm'
            instr_message = 'Votre but dans cette tâche est de minimiser la douleur que vous aller recevoir. Vous recevrez des stimulations électrique avec une intensité déterminé par la dernière image présenté dans la séquence choisis. Vous devez prendre en compte 1) ou dans la séquence vous débuter et 2) si un changemetn de règle est présent. Si vous désirer choisir la première séquence utilsier la touche n, pour la deuxième utilsier la touche m'
        else :
            key_1 = 'm'
            key_2 = 'n'
            instr_message = 'Votre but dans cette tâche est de minimiser la douleur que vous aller recevoir. Vous recevrez des stimulations électrique avec une intensité déterminé par la dernière image présenté dans la séquence choisis. Vous devez prendre en compte 1) ou dans la séquence vous débuter et 2) si un changemetn de règle est présent. Si vous désirer choisir la première séquence utilsier la touche m, pour la deuxième utilsier la touche n'

        allowed_keys_list = [key_1, key_2]







        #add a trial counter if necessary
        trial_counter = 0
    CodeComponent init_eeg
      Code Type = Auto->JS
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      Begin Experiment:
        # EEG
        import struct
        import serial
        import time
        # Trigger box Plus COM port
        adress = 'COM17'
        def init_port(adress):
            port = serial.Serial(adress, baudrate=2000000)
            time.sleep(1) # Wait to make sure it's open
            return port

        def write_port(port, pin):
            """
            Turn on one of the ditigal pin
            pin: integer in range 2-13
            """
            # Convert to string
            string = b'' + struct.pack('!B', pin)
            # Write
            port.write(string)

        port = init_port(adress)
        port.write([0x00])

        # Init EEG
        from psychopy.hardware import brainproducts
        rcs = brainproducts.RemoteControlServer(host='192.168.1.2',timeout=5)

        rcs.openRecorder()
        time.sleep(2)
        rcs.workspace = 'C:/Users/labmp-eeg/Desktop/antoine_cognitivemaps/antoine_cognitivemaps.rwksp'
        rcs.participant = expInfo['participant'] + '_' + expInfo['date']
        rcs.expName = 'cmapsfuncloc'
        time.sleep(5)
        rcs.mode = 'monitor'
        time.sleep(2)
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    TextComponent instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_message
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    KeyboardComponent instr_leave
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine eeg_start
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    TextComponent eeg_text_start
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Vérifier eeg
    KeyboardComponent eeg_start_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent start_eeg_2
      Code Type = Auto->JS
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      Begin Routine:
        rec_start = core.monotonicClock.getTime()
        rcs.startRecording()
  Routine planning
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    TextComponent planning_info
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text [set every repeat]:
        $resp_choice
        $rule_change
        $path_1_start
        $path_2_start
    KeyboardComponent path_choice
      allowedKeys [set every repeat] = $allowed_keys_list
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent eeg_trigger_planning
      Code Type = Auto->JS
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      Begin Routine:
        wait_sent = 0
        #trigger sent here is kreark
      Each Frame:
        if stim_word.status == STARTED and wait_sent == 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x20') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
      End Routine:
        port.write([0x00])
    CodeComponent photo_sensor
      Code Type = Auto->JS
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      Begin Routine:
        photodiode_box = visual.Rect(
            win=win,
            width=18,
            height=25,
            fillColor='white',
            lineColor='white',
            pos=(-win.size[0]/2 + 25, -win.size[1]/2 + 25),
            units='pix',
            autoDraw=False
        )
      Each Frame:
        if planning_info.status == STARTED:
            photodiode_box.autoDraw = True
        else:
            photodiode_box.autoDraw = False
      End Routine:
        photodiode_box.autoDraw = False
    CodeComponent choice_code
      Code Type = Auto->JS
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      Begin Routine:
        #add information for planning here

        resp_choice = f'veuillez utiliser $allowed_keys_list pour choisir la première ou la deuxième séquence'
  Routine stim_loader
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    TextComponent cross_50ms
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    StaticComponent load_images
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent eeg_trigger_fix
      Code Type = Auto->JS
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      Begin Routine:
        wait_sent = 0
      Each Frame:
        if stim_word.status == STARTED and wait_sent == 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x01') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
      End Routine:
        port.write([0x00])
  Routine sequence_showing
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    ImageComponent sequence_image_1
      image [set during: stim_loader.load_images] = $image_1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent sequence_image_2
      image [set during: stim_loader.load_images] = $image_2
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
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    ImageComponent sequence_image_3
      image [set during: stim_loader.load_images] = $image_3
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1
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    CodeComponent pain_stim
      Code Type = Auto->JS
      Begin Experiment:
        #add pain stim linked to sequence_image_3
    CodeComponent eeg_trigger_stimulis
      Code Type = Auto->JS
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      Begin Routine:
        wait_sent_start = 0
      Each Frame:
        if stim_word.status == STARTED and wait_sent_start == 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x04') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent_start = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
            port.write([0x00])
      End Routine:
        port.write([0x00])
  Routine replay_break
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    TextComponent fixation
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = +
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    CodeComponent eeg_trigger_replay
      Code Type = Auto->JS
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      Begin Routine:
        wait_sent = 0
        #thirs triggers sends b'xo2 which is blank in our workspace
      Each Frame:
        if stim_word.status == STARTED and wait_sent == 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x02') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
      End Routine:
        port.write([0x00])
    CodeComponent photo_sensor_2
      Code Type = Auto->JS
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      Begin Routine:
        photodiode_box = visual.Rect(
            win=win,
            width=18,
            height=25,
            fillColor='white',
            lineColor='white',
            pos=(-win.size[0]/2 + 25, -win.size[1]/2 + 25),
            units='pix',
            autoDraw=False
        )
      Each Frame:
        if fixation.status == STARTED:
            photodiode_box.autoDraw = True
        else:
            photodiode_box.autoDraw = False
      End Routine:
        photodiode_box.autoDraw = False
  Routine Vas
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    SliderComponent slider_pain
      color = White
      forceEndRoutine = True
      granularity = 0
      initVal = $pos
      labels = ['Aucune\ndouleur', 'Pire douleur\nimaginable']
      letterHeight = 0.04
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = 0, 100
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    CodeComponent slider_pain_code
      Code Type = Auto->JS
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      Begin Routine:
        if not all_shocks[trials.thisN]:
            continueRoutine = False

        slider_pain.marker = visual.Rect(win, width=0.005, height=0.05, lineColor='white', fillColor='white', units=slider_pain.units)

        for i, line in enumerate(slider_pain.tickLines.sizes):
            slider_pain.tickLines.sizes[i][1] = 0
        slider_pain.tickLines._needVertexUpdate = True
        pos = np.random.uniform(0, 100)
        slider_pain.startValue = pos

        # Start a timer for max duration
        vas_timer = core.CountdownTimer(start = vas_max_dur)
      Each Frame:
        inc = 0.75
        wasmoved = 0

        while True:
            keys = slider_pain_resp.getKeys(['n', 'm', 'space', 'escape'], waitRelease=False, clear=False)
            if keys and not keys[-1].duration:
                key = keys[-1].name
                if 'n' == key:
                    slider_pain.markerPos -= inc
                    wasmoved = 1
                if 'm' == key:
                    slider_pain.markerPos  += inc
                    wasmoved = 1

                # check for quit (typically the Esc key)
                if "escape" ==  key:
                    core.quit()

                if 'space' == key:
                    rating = slider_pain.markerPos
                    core.wait(0.1)
                    vaspressed = 1
                    continueRoutine=False
                    break
                # Break if no time left
                time_left = vas_timer.getTime()
                if time_left <= 0.0:
                    rating = slider_pain.markerPos
                    core.wait(0.1)
                    vaspressed = 0
                    continueRoutine = False
                    break

            #print(kb.state)
            slider_pain.draw()
            main_prompt.draw()
            space_prompt.draw()
            win.mouseVisible = False
            win.flip()
    KeyboardComponent slider_pain_resp
      allowedKeys = 'n','m','enter', 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent main_prompt
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Veuillez évaluer l'intensité de la DOULEUR ressentie.
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    TextComponent space_prompt
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Appuyez sur la barre d'espacement pour valider.
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    CodeComponent eeg_triggers
      Code Type = Auto->JS
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      Begin Routine:
        wait_sent = 0
      Each Frame:
        if cue_stim.status == STARTED and wait_sent == 0: #If the stimulus component has started and the trigger has not yet been sent. Change 'stimulus' to match the name of the component you want the trigger to be sent at the same time as
            win.callOnFlip(port.write, data=b'\x08') #Send the trigger, synced to the screen refresh
            #win.callOnFlip(eci_client.send_event, event_type = 'wait') #Send the trigger, synced to the screen refresh
            wait_sent = 1 #The wait has now been sent, so we set this to true to avoid a trigger being sent on each frame
            port.write([0x00])
      End Routine:
        port.write([0x00])
  Routine end_exp
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = Thank you
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    KeyboardComponent end_exit
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine setp_up
  Routine eeg_start
  LoopInitiator decision_making_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine stim_loader
    Routine planning
    Routine sequence_showing
    Routine replay_break
    Routine Vas
  LoopTerminator decision_making_loop
  Routine end_exp
